PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TL_Human_new
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Routines
  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please figure out which image belongs to which side (left or right) by pressing the arrow keys.

        Press SPACE to continue.
    KeyboardComponent start_trls
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    ImageComponent fix_cross
      image = Cross.png
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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  Routine trl_img_loc
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        pair_ind = 1
        right_image = None
        left_image = None
        stim_image = None
        sides = ['left', 'right']
      Begin Routine:
        thisExp.addData('group_pair', pair_ind);

        # choose center image
        image_sign = randint(0, 2*num_per_group) # choose randomly from 2 groups of images
        image_num = image_sign + 2*num_per_group*(pair_ind - 1) # get chosen image from correct set of groups
        stim_image = img_grps.loc[image_num, 'image']
        stim_group = img_grps.loc[image_num, 'group']
        stim_group_num = img_grps.loc[image_num, 'group_num']

        # choose in-group image
        in_group = img_grps[img_grps.group_num == stim_group_num]
        in_group = in_group[in_group.group != stim_group]
        in_group = in_group.reset_index()
        rand_in = randint(0, len(in_group))
        in_group_image = in_group.loc[rand_in, 'image']
        in_group_group = in_group.loc[rand_in, 'group']

        # choose out-group image
        if stim_group_num == 1: #add |3
            out_group_num = stim_group_num + 1
        elif stim_group_num == 3:
            out_group_num = stim_group_num + 1
        else:
            out_group_num = stim_group_num - 1
        out_group = img_grps[img_grps.group_num == out_group_num]
        out_group = out_group.reset_index()
        rand_out = randint(0, len(out_group))
        out_group_image = out_group.loc[rand_out, 'image']
        out_group_group = out_group.loc[rand_out, 'group']

        # test: in-group always left
        #left_image = in_group_image
        #right_image = out_group_image

        # randomly assign side
        side_sign = randint(0, 2) #non-inclusive (] for some reason
        if side_sign == 0:
            left_image = in_group_image
            right_image = out_group_image
        else:
            left_image = out_group_image
            right_image = in_group_image

        # save image choices
        thisExp.addData('stim_image', stim_image)
        thisExp.addData('left_image', left_image)
        thisExp.addData('right_image', right_image)

        # after 50 trials, move onto second set of image groups
        if day == 2:
            if trials.thisRepN == 49:
                pair_ind = 2;

        # send TTL if it is sync method
        if sync_method == 'TTL':
            ser.dtr = True;

        key_resp_2.corr = False;
      End Routine:
        # end TTL if it is sync method
        if sync_method == 'TTL':
            ser.dtr = False;

        if key_resp_2.corr:
            correct = 'CORRECT'
            thisExp.addData('ans_correctness', 1)
        else:
            correct = 'INCORRECT'
            thisExp.addData('ans_correctness', 0)
        if len(key_resp_2.keys) == 0:
            thisExp.addData('choice', None)
        else:
            thisExp.addData('choice', key_resp_2.keys)
    ImageComponent stim
      image [set every repeat] = $direc + stim_image
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent left
      image [set every repeat] = $direc + left_image
      pos = (-.6, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent right
      image [set every repeat] = $direc + right_image
      pos = (.6, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $sides[side_sign]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos = [-.8, -.4]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $diode
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      volume [set every repeat] = $audio
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  Routine feedback1
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $correct
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  Routine ISI_2
    TextComponent ISI_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine thank_you
    TextComponent end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your participation! Press esc to exit.
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  Routine settings
    TextComponent day_text
      color = black
      letterHeight = 0.05
      pos = (-.3, .45)
      startVal [time (s)] = 0.0
      text = Choose TL day (1 or 2)
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    SliderComponent slider
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = '1', '2'
      pos = (-.3, .35)
      size = (.2, 0.05)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = (1, 2)
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    TextComponent set_text
      color = black
      letterHeight = 0.05
      pos = (-.3, .15)
      startVal [time (s)] = 0.0
      text = Choose picture set (1 or 2)
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    SliderComponent slider_2
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = '1', '2'
      pos = (-.3, 0.05)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = (1, 2)
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    TextComponent pergroup_text
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      text = Choose number of images per group (3-5)
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    SliderComponent slider_3
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = '3', '4', '5'
      pos = (0, -0.25)
      size = (.3, 0.05)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = (3, 4, 5)
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    TextComponent cont_text
      color = black
      letterHeight = 0.05
      opacity [set every frame] = $cont_vis
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click arrow to continue.
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    CodeComponent init
      Code Type = Auto->JS
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      Before Experiment:
        comport_text = ''
        vis = 0
        cont_vis = 0
        sync = ['audio', 'diode', 'TTL']
      Each Frame:
        if slider_4.getRating() is not None:
            print(slider_4.getRating())
            if sync[int(slider_4.getRating())] == 'TTL':
                comport_text = 'Enter com port name (see readme for instructions)'
                vis = 1
            else:
                comport_text = ''
                vis = 0
            if slider_3.getRating() is not None:
                if slider_2.getRating() is not None:
                    if slider.getRating() is not None:
                        cont_vis = 1
                    else:
                        cont_vis = 0
                else:
                    cont_vis = 0
            else:
                cont_vis = 0
        else:
            vis = 0
            cont_vis = 0
      End Routine:
        day = slider.getRating()
        if day == 1:
            num_trls = 200
        elif day == 2:
            num_trls = 250
        thisExp.addData('day', day)

        pic_set = slider_2.getRating()
        if pic_set == 1:
            direc = 'Set1/'
        elif pic_set == 2:
            direc = 'Set2/'
        thisExp.addData('picture_set', pic_set)

        import pandas as pd #for csv reading
        num_per_group = slider_3.getRating()
        if num_per_group == 3:
            img_grps = pd.read_csv('image_groups_3p.csv')
        elif num_per_group == 4:
            img_grps = pd.read_csv('image_groups_4p.csv')
        elif num_per_group == 5:
            img_grps = pd.read_csv('image_groups_5p.csv')
        thisExp.addData('num_per_group', num_per_group)

        sync_method = sync[int(slider_4.getRating())]
        if sync_method == 'audio':
            audio = 1
            diode = 0
        elif sync_method == 'diode':
            audio = int(0)
            diode = 1.5
        else:
            import serial
            audio = int(0)
            diode= 0
            #ser = serial.Serial(textbox.text, 19200, timeout = 1)
            ser = serial.Serial('COM3', 19200, timeout = 1)
            ser.dtr = False;
        thisExp.addData('sync_method', sync_method)
    TextComponent sync_text
      color = black
      letterHeight = 0.05
      pos = (.3, .45)
      startVal [time (s)] = 0.0
      text = Choose a sync method
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    SliderComponent slider_4
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'audio', 'diode', 'TTL'
      pos = (.3, 0.35)
      size = (.3, .05)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = (0, 1, 2)
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    TextComponent enter_text
      color = black
      letterHeight = 0.025
      opacity [set every frame] = 1
      pos = (.3, 0)
      text [set every frame] = $comport_text
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    PolygonComponent polygon_2
      fillColor = $[1,0,0]
      opacity [set every frame] = $cont_vis
      ori = 90
      pos = (.4, -.4)
      shape = triangle
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    MouseComponent cont_mouse
      clickable = polygon_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine trl_img_loc_test
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        img_grps = pd.read_csv('image_groups_new.csv')

        pair_ind = 1
        right_image = None
        left_image = None
        stim_image = None
      Begin Routine:
        # choose center image
        image_sign = randint(0, 5)
        image_num = image_sign + 6*(pair_ind - 1)
        stim_image = img_grps.loc[image_num, 'image']
        stim_group = img_grps.loc[image_num, 'group']
        stim_group_num = img_grps.loc[image_num, 'group_num']
        print(stim_group_num)
        print(stim_group_num == 1)

        # choose in-group image
        in_group = img_grps[img_grps.group_num == stim_group_num]
        in_group = in_group[in_group.group != stim_group]
        in_group = in_group.reset_index()
        rand_in = randint(0, 1)
        in_group_image = in_group.loc[rand_in, 'image']
        in_group_group = in_group.loc[rand_in, 'group']

        # choose out-group image
        if stim_group_num == 1: #add |3
            out_group_num = stim_group_num + 1
        else:
            out_group_num = stim_group_num - 1
        out_group = img_grps[img_grps.group_num == out_group_num]
        out_group = out_group.reset_index()
        rand_out = randint(0, 2)
        out_group_image = out_group.loc[rand_out, 'image']
        out_group_group = out_group.loc[rand_out, 'group']

        # test: in-group always left
        left_image = in_group_image
        right_image = out_group_image
    TextComponent stim_test
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stim_image
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    TextComponent left_test
      letterHeight = 0.1
      pos = (-.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $left_image
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    TextComponent right_test
      letterHeight = 0.1
      pos = (.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $right_image
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Flow
  Routine settings
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = num_trls
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    Routine fix
    Routine trl_img_loc
    Routine feedback1
    Routine ISI_2
  LoopTerminator trials
  Routine thank_you
